#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3		// Use modern global access method and strict wave access.

#include "Read_LL_ECG_Series"
#include "Read_LL_W_Series"
#include "Read_LL_ORI_Series"
#include "Read_LAT_Series"

////////////////////////////////////////////////////////////////////////////////
/// @file		ReadLoggerTools.ipf
/// @breif		The tools for reading ECG logger data from raw text data
/// @author		Takaaki K. Abe (E-mail: t.abe.hpa@gmail.com)
/// @date		
/// Version:	1.0
/// Revision:	0
/// @note		
/// 
/// @attention	The author takes no responsibility for its use or misuse. 
///				Copies of this code should be distributed with their original identification headers.
///				Any code derived from this code should not be sold for commercial purposes.
///				Please cite the use of this code whenever possible.
///
////////////////////////////////////////////////////////////////////////////////

